---
API: 2
OpenSesame: 3.1.6
Platform: nt
---
set width 1920
set uniform_coordinates yes
set title "Luck & Vogel Visual Working Memory"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\Michael\\Documents\\GitHub\\LuckVogel"
set disable_garbage_collection yes
set description "tDCS and tACS paradigm with EEG in cognitive boost by short term stimulation"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi no
set background black

define inline_script connect_eeg
	set description "Executes Python code"
	set _run ""
	___prepare__
	import socket
	
	var.CONNECTED = False
	try:
		starstim = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
		starstim.connect(('localhost', 1234))
		var.CONNECTED = True
	except:
		print 'Cannot connect to EEG system, please restart recording!'
	
	var.CONNECTED = True
	__end__

define mouse_response continue_inst
	set timeout infinite
	set show_cursor no
	set flush yes
	set duration mouseclick
	set description "Collects mouse responses"
	set allowed_responses 1

define sketchpad cue
	set duration 100
	set description "Displays stimuli"
	draw rect color="[c1a]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==3" w=64 x="[x1]" y="[y1]" z_index=0
	draw rect color="[c2a]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==3" w=64 x="[x2]" y="[y2]" z_index=0
	draw rect color="[c3a]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==3" w=64 x="[x3]" y="[y3]" z_index=0
	draw rect color="[c1a]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==4" w=64 x="[x1]" y="[y1]" z_index=0
	draw rect color="[c2a]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==4" w=64 x="[x2]" y="[y2]" z_index=0
	draw rect color="[c3a]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==4" w=64 x="[x3]" y="[y3]" z_index=0
	draw rect color="[c4a]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==4" w=64 x="[x4]" y="[y4]" z_index=0
	draw rect color="[c1a]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==6" w=64 x="[x1]" y="[y1]" z_index=0
	draw rect color="[c2a]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==6" w=64 x="[x2]" y="[y2]" z_index=0
	draw rect color="[c3a]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==6" w=64 x="[x3]" y="[y3]" z_index=0
	draw rect color="[c4a]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==6" w=64 x="[x4]" y="[y4]" z_index=0
	draw rect color="[c5a]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==6" w=64 x="[x5]" y="[y5]" z_index=0
	draw rect color="[c6a]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==6" w=64 x="[x6]" y="[y6]" z_index=0
	draw rect color="[c1a]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==8" w=64 x="[x1]" y="[y1]" z_index=0
	draw rect color="[c2a]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==8" w=64 x="[x2]" y="[y2]" z_index=0
	draw rect color="[c3a]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==8" w=64 x="[x3]" y="[y3]" z_index=0
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
define sketchpad eeg_fail
	set duration 3000
	set description "Displays stimuli"
	draw textline center=1 color="#fc0006" font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if="[CONNECTED] == \"no\"" text="Error!<br /><br />EEG is not connected. Please<br />restart computer and recording." x=0 y=0 z_index=0

define sketchpad eeg_success
	set duration 3000
	set description "Displays stimuli"
	draw textline center=1 color="#00ff00" font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if="[CONNECTED] == \"yes\"" text="Success!<br /><br />EEG is connected." x=0 y=0 z_index=0

define sketchpad ending
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="This part is over. <br /><br />Wait for instuctions from experimenter." x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run connect_eeg always
	run eeg_fail always
	run eeg_success always
	run instructions always
	run continue_inst always
	run main always
	run ending always

define loop experimental_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 120
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 nBoxes 8
	setcycle 0 isChanged True
	setcycle 0 x1 -398
	setcycle 0 y1 -240
	setcycle 0 x2 197
	setcycle 0 y2 -273
	setcycle 0 x3 -323
	setcycle 0 y3 -68
	setcycle 0 x4 -51
	setcycle 0 y4 -8
	setcycle 0 x5 383
	setcycle 0 y5 -39
	setcycle 0 x6 286
	setcycle 0 y6 -64
	setcycle 0 x7 -47
	setcycle 0 y7 275
	setcycle 0 x8 -286
	setcycle 0 y8 160
	setcycle 0 c1a purple
	setcycle 0 c2a green
	setcycle 0 c3a orange
	setcycle 0 c4a orange
	setcycle 0 c5a orange
	setcycle 0 c6a purple
	setcycle 0 c7a orange
	setcycle 0 c8a red
	setcycle 0 c1b purple
	setcycle 0 c2b green
	setcycle 0 c3b orange
	setcycle 0 c4b orange
	setcycle 0 c5b red
	setcycle 0 c6b purple
	setcycle 0 c7b orange
	setcycle 0 c8b red
	setcycle 0 index 1
	setcycle 0 correctAnswer 1
	setcycle 1 nBoxes 8
	setcycle 1 isChanged False
	setcycle 1 x1 -113
	setcycle 1 y1 -268
	setcycle 1 x2 338
	setcycle 1 y2 145
	setcycle 1 x3 162
	setcycle 1 y3 -72
	setcycle 1 x4 57
	setcycle 1 y4 -45
	setcycle 1 x5 -87
	setcycle 1 y5 -106
	setcycle 1 x6 270
	setcycle 1 y6 8
	setcycle 1 x7 -338
	setcycle 1 y7 226
	setcycle 1 x8 165
	setcycle 1 y8 -337
	setcycle 1 c1a red
	setcycle 1 c2a grey
	setcycle 1 c3a purple
	setcycle 1 c4a grey
	setcycle 1 c5a orange
	setcycle 1 c6a grey
	setcycle 1 c7a green
	setcycle 1 c8a green
	setcycle 1 c1b red
	setcycle 1 c2b grey
	setcycle 1 c3b purple
	setcycle 1 c4b grey
	setcycle 1 c5b orange
	setcycle 1 c6b grey
	setcycle 1 c7b green
	setcycle 1 c8b green
	setcycle 1 index 2
	setcycle 1 correctAnswer 3
	setcycle 2 nBoxes 6
	setcycle 2 isChanged True
	setcycle 2 x1 -188
	setcycle 2 y1 -158
	setcycle 2 x2 -434
	setcycle 2 y2 161
	setcycle 2 x3 43
	setcycle 2 y3 283
	setcycle 2 x4 -5
	setcycle 2 y4 -33
	setcycle 2 x5 268
	setcycle 2 y5 -44
	setcycle 2 x6 190
	setcycle 2 y6 -2
	setcycle 2 x7 102
	setcycle 2 y7 -244
	setcycle 2 x8 -227
	setcycle 2 y8 325
	setcycle 2 c1a white
	setcycle 2 c2a green
	setcycle 2 c3a green
	setcycle 2 c4a purple
	setcycle 2 c5a yellow
	setcycle 2 c6a orange
	setcycle 2 c7a orange
	setcycle 2 c8a orange
	setcycle 2 c1b white
	setcycle 2 c2b green
	setcycle 2 c3b green
	setcycle 2 c4b purple
	setcycle 2 c5b yellow
	setcycle 2 c6b yellow
	setcycle 2 c7b orange
	setcycle 2 c8b orange
	setcycle 2 index 3
	setcycle 2 correctAnswer 1
	setcycle 3 nBoxes 4
	setcycle 3 isChanged False
	setcycle 3 x1 -144
	setcycle 3 y1 158
	setcycle 3 x2 77
	setcycle 3 y2 -313
	setcycle 3 x3 369
	setcycle 3 y3 -177
	setcycle 3 x4 52
	setcycle 3 y4 123
	setcycle 3 x5 -446
	setcycle 3 y5 -295
	setcycle 3 x6 396
	setcycle 3 y6 203
	setcycle 3 x7 -442
	setcycle 3 y7 -301
	setcycle 3 x8 411
	setcycle 3 y8 -129
	setcycle 3 c1a blue
	setcycle 3 c2a white
	setcycle 3 c3a blue
	setcycle 3 c4a orange
	setcycle 3 c5a grey
	setcycle 3 c6a green
	setcycle 3 c7a red
	setcycle 3 c8a green
	setcycle 3 c1b blue
	setcycle 3 c2b white
	setcycle 3 c3b blue
	setcycle 3 c4b orange
	setcycle 3 c5b grey
	setcycle 3 c6b green
	setcycle 3 c7b red
	setcycle 3 c8b green
	setcycle 3 index 4
	setcycle 3 correctAnswer 3
	setcycle 4 nBoxes 6
	setcycle 4 isChanged True
	setcycle 4 x1 -102
	setcycle 4 y1 -13
	setcycle 4 x2 -386
	setcycle 4 y2 -297
	setcycle 4 x3 26
	setcycle 4 y3 -55
	setcycle 4 x4 340
	setcycle 4 y4 -49
	setcycle 4 x5 184
	setcycle 4 y5 -145
	setcycle 4 x6 -199
	setcycle 4 y6 -74
	setcycle 4 x7 -140
	setcycle 4 y7 -106
	setcycle 4 x8 328
	setcycle 4 y8 143
	setcycle 4 c1a grey
	setcycle 4 c2a purple
	setcycle 4 c3a blue
	setcycle 4 c4a purple
	setcycle 4 c5a purple
	setcycle 4 c6a blue
	setcycle 4 c7a green
	setcycle 4 c8a blue
	setcycle 4 c1b grey
	setcycle 4 c2b purple
	setcycle 4 c3b blue
	setcycle 4 c4b grey
	setcycle 4 c5b purple
	setcycle 4 c6b blue
	setcycle 4 c7b green
	setcycle 4 c8b blue
	setcycle 4 index 5
	setcycle 4 correctAnswer 1
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	setcycle 7 nBoxes 3
	setcycle 7 isChanged False
	setcycle 7 x1 -309
	setcycle 7 y1 -282
	setcycle 7 x2 5
	setcycle 7 y2 -244
	setcycle 7 x3 -139
	setcycle 7 y3 -9
	setcycle 7 x4 350
	setcycle 7 y4 -163
	setcycle 7 x5 228
	setcycle 7 y5 -166
	setcycle 7 x6 -423
	setcycle 7 y6 64
	setcycle 7 x7 -479
	setcycle 7 y7 163
	setcycle 7 x8 -48
	setcycle 7 y8 147
	setcycle 7 c1a white
	setcycle 7 c2a yellow
	setcycle 7 c3a orange
	setcycle 7 c4a red
	setcycle 7 c5a green
	setcycle 7 c6a red
	setcycle 7 c7a yellow
	setcycle 7 c8a purple
	setcycle 7 c1b white
	setcycle 7 c2b yellow
	setcycle 7 c3b orange
	setcycle 7 c4b red
	setcycle 7 c5b green
	setcycle 7 c6b red
	setcycle 7 c7b yellow
	setcycle 7 c8b purple
	setcycle 7 index 8
	setcycle 7 correctAnswer 3
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	run trial_sequence

define sketchpad fixation
	set duration 400
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad instructions
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if="[CONNECTED] == \"yes\"" text="Hello!<br /><br />Thank you for participation in <br />cognitive boosting experiment by <br />electrical stimulation.<br /><br />Feel free to ask any questions <br />before experiment starts. After then <br />try to prevent excesive blinking or<br /> swallowing and chewing.<br /><br />At next sequence you will <br />try experiment in three <br />trials.<br /><br />Press left mouse button to continue." x=0 y=0 z_index=0

define logger logfile
	set description "Logs experimental data"
	set auto_log yes

define sequence main
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run experimental_loop "[CONNECTED] == \"yes\""

define mouse_response mouse
	set timeout infinite
	set show_cursor no
	set flush yes
	set duration mouseclick
	set description "Collects mouse responses"
	set correct_response "[correctAnswer]"
	set allowed_responses "1;3"

define sketchpad response
	set duration 0
	set description "Displays stimuli"
	draw rect color=white fill=0 h=608 penwidth=5 show_if=always w=608 x=-672 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Changed<br /><br />Left mouse button" x=-352 y=0 z_index=0
	draw rect color=white fill=0 h=608 penwidth=5 show_if=always w=608 x=64 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Not changed<br /><br />Right mouse button" x=384 y=0 z_index=0

define sketchpad retention
	set duration 900
	set description "Displays stimuli"

define inline_script tag_response
	set description "Executes Python code"
	set _run ""
	___prepare__
	import socket
	
	try:
		starstim = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
		starstim.connect(('localhost', 1234))
		if var.correct == 1:
			starstim.send("<TRIGGER>" + str(var.nBoxes + 10) + "</TRIGGER>")
		else:
			starstim.send("<TRIGGER>" + str(var.nBoxes + 20) + "</TRIGGER>")
	except:
		print 'Cannot connect to EEG system, please restart recording!'
	__end__

define inline_script tag_target
	set description "Executes Python code"
	set _run ""
	___prepare__
	import socket
	
	try:
		starstim = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
		starstim.connect(('localhost', 1234))
		starstim.send("<TRIGGER>" + str(var.nBoxes) + "</TRIGGER>")
	except:
		print 'Cannot connect to EEG system, please restart recording!'
	__end__

define sketchpad target
	set duration 1000
	set description "Displays stimuli"
	draw rect color="[c1b]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==3" w=64 x="[x1]" y="[y1]" z_index=0
	draw rect color="[c2b]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==3" w=64 x="[x2]" y="[y2]" z_index=0
	draw rect color="[c3b]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==3" w=64 x="[x3]" y="[y3]" z_index=0
	draw rect color="[c1b]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==4" w=64 x="[x1]" y="[y1]" z_index=0
	draw rect color="[c2b]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==4" w=64 x="[x2]" y="[y2]" z_index=0
	draw rect color="[c3b]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==4" w=64 x="[x3]" y="[y3]" z_index=0
	draw rect color="[c4b]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==4" w=64 x="[x4]" y="[y4]" z_index=0
	draw rect color="[c1b]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==6" w=64 x="[x1]" y="[y1]" z_index=0
	draw rect color="[c2b]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==6" w=64 x="[x2]" y="[y2]" z_index=0
	draw rect color="[c3b]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==6" w=64 x="[x3]" y="[y3]" z_index=0
	draw rect color="[c4b]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==6" w=64 x="[x4]" y="[y4]" z_index=0
	draw rect color="[c5b]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==6" w=64 x="[x5]" y="[y5]" z_index=0
	draw rect color="[c6b]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==6" w=64 x="[x6]" y="[y6]" z_index=0
	draw rect color="[c1b]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==8" w=64 x="[x1]" y="[y1]" z_index=0
	draw rect color="[c2b]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==8" w=64 x="[x2]" y="[y2]" z_index=0
	draw rect color="[c3b]" fill=1 h=64 penwidth=1 show_if="[nBoxes]==8" w=64 x="[x3]" y="[y3]" z_index=0
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
define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation always
	run cue always
	run retention always
	run tag_target always
	run target always
	run response always
	run mouse always
	run tag_response always
	run logfile always

